PsychoPy2experiment version="3.1.5"
Settings
  Data filename = u'data/%s_Session%s_%s' % (expInfo['task'], expInfo['session'], expInfo['participant'])
  Experiment info = {'language': "['English', 'Chinese']", 'participant': '', 'session': '001', 'task': "['MFT_R', 'MFT_M', 'practice']", 'precision': '[None, 0.05, 0.04, 0.03, 0.02, 0.01]'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Revised Majority Function Task
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Routines
  Routine trial
    ImageComponent fix_start
      image = image/fix.png
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent mask1
      image = image/mask.png
      pos = (0.2, 0)
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = $ET+0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent mask2
      image = image/mask.png
      pos = (0.13, 0.13)
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = $ET+0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent mask3
      image = image/mask.png
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = $ET+0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent mask4
      image = image/mask.png
      pos = (-0.13, 0.13)
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = $ET+0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent mask5
      image = image/mask.png
      pos = (-0.2, 0)
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = $ET+0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent mask6
      image = image/mask.png
      pos = (-0.13, -0.13)
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = $ET+0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent mask7
      image = image/mask.png
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = $ET+0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent mask8
      image = image/mask.png
      pos = (0.13, -0.13)
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = $ET+0.5
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      correctAns = $correctAns
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      store = first key
      storeCorrect = True
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    CodeComponent code_trial
      Code Type = Both
      Begin Experiment:
        import numpy as np

        # change the images according to the amount of arrows(left, right)
        def imageSet(leftN, rightN):
            images = [None, None, None, None, None]
            for i in range(leftN):
                images[i] = 'image/left.png'
            for j in range(rightN):
                images[leftN + j] = 'image/right.png'
            return images
      Begin JS Experiment:
        images = [undefined, undefined, undefined, undefined, undefined];

        // change the images according to the amount of arrows(left, right):
        imageSet = function(leftN, rightN) {
            var images = ['image/none.png', 'image/none.png', 'image/none.png', 'image/none.png', 'image/none.png'];
            var i = 0;
            var j = 0;
            for (i = 0; i < leftN; i++) {
                images[i] = 'image/left.png';
            }
            for (j = 0; j < rightN; j++) {
                images[j+i] = 'image/right.png';
            }
            return images;
        }

        // randomize the order of a list:
        shuffle = function(array) {
            var len = array.length;
            for (var i = len -1; i > 0; i--) {
            var j = Math.floor(Math.random() * (i + 1));
            [array[i], array[j]] = [array[j], array[i]];
            }
            return array;
        }
      Begin JS Routine:
        // randomnize the correctAns
        var correctRand = Math.random();
        if (correctRand < 0.5){
            correctAns = 'f';
        }else{
            correctAns = 'j';
        }

        psychoJS.experiment.addData('pickIndex',pick);
        psychoJS.experiment.addData('correctAns.keys',correctAns);

        //  set the images according to the ratio of the trial
        var majorN = parseInt(Ratio[5]);
        var minorN = parseInt(Ratio[6]);
        if (correctAns == 'f'){
            images = imageSet(majorN, minorN);
        } else {
            images = imageSet(minorN, majorN);
        }
        image1.image = images[0]
        image2.image = images[1];
        image3.image = images[2];
        image4.image = images[3];
        image5.image = images[4];

        var positions = [[0.2, 0], [0.13, 0.13], [0, 0.2], [-0.13, 0.13], [-0.2, 0], [-0.13, -0.13], [0, -0.2], [0.13, -0.13]];
        positions = shuffle(positions);
        image1.pos = positions[0];
        image2.pos = positions[1];
        image3.pos = positions[2];
        image4.pos = positions[3];
        image5.pos = positions[4];
      Begin Routine:
        # randomnize the correctAns
        correctRand = np.random.randint(2)
        if correctRand == 1:
            correctAns = 'f'
        else:
            correctAns = 'j'

        trials.addData('pickIndex',pick)
        trials.addData('correctAns.keys',correctAns)


        # set the images according to the ratio of the trial
        majorN, minorN = int(Ratio[5]), int(Ratio[6])
        if correctAns == 'f':
            images = imageSet(majorN, minorN)
        else:
            images = imageSet(minorN, majorN)
        image1.setImage(images[0])
        image2.setImage(images[1])
        image3.setImage(images[2])
        image4.setImage(images[3])
        image5.setImage(images[4])



        # shuffle the positions
        positions = [(0.2, 0), (0.13, 0.13), (0, 0.2), (-0.13, 0.13), (-0.2, 0), (-0.13, -0.13), (0, -0.2), (0.13, -0.13)].copy()
        np.random.shuffle(positions)
        image1.setPos(positions[0])
        image2.setPos(positions[1])
        image3.setPos(positions[2])
        image4.setPos(positions[3])
        image5.setPos(positions[4])
      End JS Routine:
        // update the listACC
        mapACC.get([Ratio, ET].join()).push(key_resp.corr)
      End Routine:
        # update the listACC
        listACC.append([Ratio, ET, key_resp.corr])
    ImageComponent image1
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $ET
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    ImageComponent image2
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $ET
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    ImageComponent image3
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $ET
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    ImageComponent image4
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $ET
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    ImageComponent image5
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $ET
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  Routine instr
    TextComponent text_instr
      color = black
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        完成一定试次后会出现休息窗口





        按空格开始
    KeyboardComponent key_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_instr
      Code Type = Both
  Routine prep
    ImageComponent fix_prep
      image = image/fix.png
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $prepTime
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    CodeComponent code_prep
      Code Type = Both
      Begin Experiment:
        prepare = True

        # get a dict of the predicted accuracy
        if expInfo['task'] == 'MFT_R':
            with open("dictDeriv.txt", 'r') as fDeriv:
                dictDeriv = eval(fDeriv.read())

        # pick the condition according to ECCC
        def selection(ECCC):
            c = round(ECCC, 2)
            listDeriv = []
            for i in Ratios:
                for j in ETs:
                    deriv = dictDeriv[(c, i, j)]
                    listDeriv.append(deriv)
            derivSum = np.sum(listDeriv)
            temp = np.random.uniform(0, derivSum)
            curr_sum = 0
            ret = None
            for n in range(12):
                curr_sum += listDeriv[n]
                if temp <= curr_sum:
                    ret = '%s' % n
                    break
            return ret
      Begin JS Experiment:
        prepare = true;
        pick = ':';
        repN = 1;

        // pick the condition according to ECCC:
        selection = function(c){
            var listDeriv = []
            var sumDeriv = 0
            for (let i of Ratios) {
                for (let j of ETs) {
                    var deriv = mapEacc.get([c, i, j].join())
                    sumDeriv = deriv + sumDeriv
                    listDeriv.push(deriv)
                }
            }
            var temp = Math.random() * sumDeriv
            var curr_sum = 0
            var ret = undefined
            for (let n = 0; n < 12; n++){
                curr_sum = listDeriv[n] + curr_sum
                if (temp <= curr_sum) {
                    ret = n.toString() + ':' + (n+1).toString()
                    break
                }
            }
            return ret
        }
      Begin JS Routine:
        if (prepare == true){
            prepTime = 2;
        } else {
            prepTime = 0;
        }
      Begin Routine:
        if prepare == True:
            prepTime = 2
        else:
            prepTime = 0
      End JS Routine:
        if (expInfo['task'] == 'MFT_M'){
            repN = 1;
            pick = ':';
        } else if (expInfo['task'] == 'practice'){
            repN = 1;
            pick = ':';
            prepare = false;
        } else {
            prepare = false;
            if (cat == false){
                repN = 2;
                pick = ':';
            } else {
                repN = 1;
                pick = selection(ECCC);
            }
        }
      End Routine:
        # initialize the parameters
        if expInfo['task'] == 'MFT_M':
            repN = 1
            pick = ':'
        elif expInfo['task'] == 'practice':
            repN = 1
            pick = ':'
        elif expInfo['task'] == 'MFT_R' and cat == False:
            repN = 2
            pick = ':'
            prepare = False
        else:
            repN = 1
            prepare = False
            pick = selection(ECCC)
  Routine feedbacks
    TextComponent feedback
      color = black
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = 正确
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    ImageComponent fix_end
      image = image/fix.png
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.25
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    CodeComponent code_feedback
      Code Type = Both
      Begin JS Routine:
        var msgFeedback = '';
        if (expInfo['language'] == 'Chinese'){
            if (key_resp.corr){
                msgFeedback = "正确!";
            } else{
                msgFeedback = "错误!!!";
            }
        } else {
            if (key_resp.corr){
                msgFeedback = "Correct!";
            } else{
                msgFeedback = "Wrong!!!";
            }
        }
        feedback.setText(msgFeedback);
      Begin Routine:
        # present whether the response is correct.
        msgFeedback = ''
        if expInfo['language'] == 'Chinese':
            if key_resp.corr:
                msgFeedback = "正确!"
            else:
                msgFeedback = "错误!!!"
        else:
            if key_resp.corr:
                msgFeedback = "Correct!"
            else:
                msgFeedback = "Wrong!!!"
        feedback.setText(msgFeedback)
  Routine end
    TextComponent text_end
      color = black
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The end
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    KeyboardComponent key_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine estimation
    KeyboardComponent key_rest
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [condition] = $rest
      store = nothing
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    TextComponent text_rest
      color = black
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [condition] = $rest
      text = 休息片刻，可按空格跳过
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    CodeComponent code_estimation
      Code Type = Both
      Begin Experiment:
        import pandas as pd
        import csv

        # get a dict of the predicted accuracy
        with open("dictEACC.txt", 'r') as fEACC:
            dictEACC = eval(fEACC.read())

        # ECCC estimation using the accuracy matrix
        def getECCC(dfACC):
            #empirical accuracy
            dictACC = {}
            for i in Ratios:
                for j in ETs:
                    dfTemp = dfACC[(dfACC.ETs == j) & (dfACC.Ratios == i)]
                    acc = dfTemp['ACC'].mean()
                    dictACC.update({(i,j):acc})

            # maximun likelihood estimation
            lastL = False
            for c in np.arange(0, 10, 0.01):
                c = round(c, 2)
                lnL = np.log(1)
                for i in Ratios:
                    for j in ETs:
                        Eacc = dictEACC[(c, i, j)]
                        #Eacc = getEacc(c, i, j)
                        ACC = dictACC[(i, j)]
                        if Eacc == 1:
                            Eacc =0.999
                        elif Eacc == 0:
                            Eacc = 0.001
                        lnL = lnL + ACC * np.log(Eacc) + (1 - ACC) * np.log(1 - Eacc)
                L = -2*lnL
                if lastL == False:
                    lastL = L
                    ECCC = c
                elif L < lastL:
                    lastL = L
                    ECCC = c
            return ECCC
      Begin JS Experiment:
        rest = true;

        // ECCC estimation using the accuracy matrix (maximun likelihood estimation):
        getEccc = function(mapACC){
            var ECCC = 0;
            var lastL = 0;
            for (let n = 0; n < 1000; n++) {
                var c = n/100;
                var lnL = Math.log(1);
                for (let i of Ratios){
                    for (let j of ETs) {
                        var listACC = mapACC.get([i,j].join());
                        var meanACC = listACC.reduce((a, b) => a + b) / listACC.length;
                        if (meanACC == 1){
                            meanACC = 0.999;
                        } else if (meanACC == 0){
                            meanACC = 0.001;
                        }
                        var Eacc = mapEacc.get([c, i, j].join());
                        lnL = meanACC * Math.log(Eacc) + (1 - meanACC) * Math.log(1 - Eacc) + lnL;
                    }
                }
                var L = -2 * lnL;
                if (!lastL) {
                    lastL = L;
                    ECCC = c;
                }else if (L < lastL){
                    lastL = L;
                    ECCC = c;
                }
            }
            return ECCC;
        }

        // calculate the stdError from a list:
        stdError = function(list){
            var mean = list.reduce((a, b) => a + b) / list.length;
            var stdDev = Math.sqrt(list.map(n=> (n-mean) * (n-mean)).reduce((a, b) => a + b) / list.length);
            var SE = stdDev / Math.sqrt(list.length - 1)
            return SE;
        }
      Begin JS Routine:
        // update the listECCC
        if (expInfo['task'] == 'MFT_R'){
            cat = true;
            ECCC = getEccc(mapACC);
            listECCC.push(ECCC);

            // calculate the SE of the listECCC
            if (listECCC.length >= 2 && expInfo['precision'] != 'None'){
                var SE = stdError(listECCC);

                // end the blockLoop when reach the SE criteria
                if (listECCC.length >= 25 && SE <= parseFloat(expInfo['precision'])){
                    psychoJS.experiment.removeLoop(trials);
                    psychoJS.experiment.removeLoop(blocks);
                    psychoJS.experiment.removeLoop(MFTR);
                    return Scheduler.Event.QUIT;
                }
            }
        }


        if (expInfo['task'] == 'MFT_M'){
            rest = false;
        }else{
            rest = true;
        }

        var msgRest = ''
        if (expInfo['language'] == 'English'){
            msgRest  = "Take a rest, press space bar to continue.."
            text_rest.setText(msgRest)
        }
      Begin Routine:
        # update the listECCC
        if expInfo['task'] == 'MFT_R':
            cat = True
            dfACC = pd.DataFrame(listACC, columns = ['Ratios', 'ETs', 'ACC'])
            ECCC = getECCC(dfACC)
            listECCC.append(ECCC)

            # calculate the SE of the listECCC
            if len(listECCC) >= 2 and expInfo['precision'] != 'None':
                SE = np.std(listECCC) / np.sqrt(len(listECCC) - 1)

                # end the blockLoop when reach the SE criteria
                if len(listECCC) >= 25 and SE <= float(expInfo['precision']):
                    break


        if expInfo['task'] == 'MFT_M':
            rest = False
        else:
            rest = True

        msgRest = ''
        if expInfo['language'] == 'English':
            msgRest  = "Take a rest, press space bar to continue.."
            text_rest.setText(msgRest)
      End Experiment:
        # save the ECCC of each trial in MFT_R
        if expInfo['task'] == 'MFT_R':
            trial_MFT_R = [expInfo['date'], expInfo['participant'], expInfo['session']] + listECCC
            with open('estimationResult/trial_MFT_R.csv','a',newline='') as f1:
                csvTrial= csv.writer(f1)
                csvTrial.writerow(trial_MFT_R)

        # save the final ECCC of all tasks
        dfACC = pd.DataFrame(listACC, columns = ['Ratios', 'ETs', 'ACC'])
        CCC = getECCC(dfACC)
        resultCCC = [expInfo['date'], expInfo['participant'], expInfo['session'], expInfo['task'], CCC]
        with open('estimationResult/resultCCC.csv','a',newline='') as f2:
            csvResult= csv.writer(f2)
            csvResult.writerow(resultCCC)
  Routine initialize
    CodeComponent code_initialize
      Code Type = Both
      Begin Experiment:
        ECCC = None
        cat = False
      Begin JS Experiment:
        cat = false;
        ECCC = false;
        blockN = 1;
        blockCondition = undefined;
      Begin JS Routine:
        if (expInfo['task'] == 'MFT_M'){
            blockN = 1;
            blockCondition = 'conditions/MFT_M_blocks.xlsx';
        } else {
            blockCondition = 'conditions/MFT_R_blocks.xlsx';
            if (expInfo['task'] == 'practice') {
                blockN = 8;
            }else if (expInfo['task'] == 'MFT_R' && cat == false){
                blockN = 1;
            }else{
                blockN = 192;
            }
        }
      Begin Routine:
        # initialize the parameters
        if expInfo['task'] == 'MFT_M':
            blockN = 1
            blockCondition = 'conditions/MFT_M_blocks.xlsx'
        else:
            blockCondition = 'conditions/MFT_R_blocks.xlsx'
            if expInfo['task'] == 'practice':
                blockN = 8
            elif expInfo['task'] == 'MFT_R' and cat == False:
                blockN = 1
            else:
                blockN = 192
  Routine welcome
    TextComponent text_welcome
      color = black
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 欢迎参加实验
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    TextComponent text_MFT
      color = black
      letterHeight = 0.08
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 1
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      text:
        Majority Function Task
    TextComponent text_indicate
      color = black
      letterHeight = 0.04
      pos = (0, 0.22)
      saveStartStop = False
      startVal [time (s)] = 1
      text = 屏幕上会呈现3或5个箭头，这些箭头可能指向左也可能指向右
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    ImageComponent image_instr
      image = image/instr.png
      pos = (0, 0.02)
      saveStartStop = False
      size = (1.2, 0.4)
      startVal [time (s)] = 1
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    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.5
      store = nothing
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    TextComponent text_target
      color = black
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      text = 你的任务是指出在屏幕上所呈现的箭头中，大多数箭头所指的方向
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    TextComponent text_press
      color = black
      letterHeight = 0.04
      pos = (0, -0.32)
      saveStartStop = False
      startVal [time (s)] = 1
      text = 如果判断多数箭头方向为左请按F键，判断为右请按J键
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    TextComponent text_continue
      color = black
      letterHeight = 0.05
      pos = (0, -0.42)
      saveStartStop = False
      startVal [time (s)] = 1
      text = 按空格继续...
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        # initialize the parameters
        if expInfo['task'] == 'MFT_R':
            N = 2
        else:
            N = 1
        listACC = []
        ETs = [0.25, 0.5, 1, 2]
        Ratios = ['ratio32', 'ratio41', 'ratio21']
        listECCC = []
        if expInfo['task'] == 'MFT_M':
            Ratios = ['ratio32', 'ratio41', 'ratio21', 'ratio30', 'ratio50', 'ratio10']
      Begin JS Experiment:
        // initialize the parameters:
        N = 1;
        if (expInfo['task'] == 'MFT_R'){
            N = 2;
        } else{
            N = 1;
        }
        Ratios = ['ratio32', 'ratio41', 'ratio21'];
        ETs = [0.25, 0.5, 1, 2];
        listECCC = []
        if (expInfo['task'] == 'MFT_M') {
            Ratios = ['ratio32', 'ratio41', 'ratio21', 'ratio30', 'ratio50', 'ratio10'];
        }
        mapACC = new Map();
        for (let i of Ratios){
            for (let j of ETs) {
                var acc = []
                mapACC.set([i,j].join(),acc)
            }
        }


        // generate the map of Eacc and Deriv from the list:
        listEacc = [];
        $.ajax({
          url: 'resources/listEacc.txt',
          dataType: 'text',
          async: false,
        }).done(function(data){
            listEacc = eval(data);
        });
        listDeriv = []
        $.ajax({
          url: 'resources/listDeriv.txt',
          dataType: 'text',
          async: false,
        }).done(function(data){
            listDeriv = eval(data);
        });
        mapEacc = new Map();
        listEacc.forEach(element => {
            mapEacc.set(element[0].join(), element[1])
        });
        mapDeriv = new Map();
        listDeriv.forEach(element => {
            mapDeriv.set(element[0].join(), element[1])
        });
      Begin JS Routine:
        var msg0 = '';
        var msg1 = '';
        var msg2 = '';
        var msg3 = '';
        var msg4 = '';
        if (expInfo['language'] == 'English'){
            msg0 = 'welcome to the experiment';
            msg1 = "Several arrows would be shown on the screen pointing left or right, for example:";
            msg2 = 'Your task is to indicate the direction of the majority arrows pointed.';
            msg3 = "Press the 'F' button if the direction was left, or the 'J' button if the direction was right.";
            msg4 = 'Press space bar to continue...';
            text_welcome.setText(msg0)
            text_indicate.setText(msg1);
            text_target.setText(msg2);
            text_press.setText(msg3);
            text_continue.setText(msg4);
        }
      Begin Routine:
        if expInfo['language'] == 'English':
            msg0 = 'welcome to the experiment'
            msg1 = "Several arrows would be shown on the screen pointing left or right, for example:"
            msg2 = 'Your task is to indicate the direction in which the majority of the arrows point.'
            msg3 = "Press the 'F' button if the direction was left, or the 'J' button if the direction was right."
            msg4 = 'Press space bar to continue...'
            text_welcome.setText(msg0)
            text_indicate.setText(msg1)
            text_target.setText(msg2)
            text_press.setText(msg3)
            text_continue.setText(msg4)
Flow
  Routine welcome
  LoopInitiator MFTR loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = $N
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    Routine initialize
    LoopInitiator blocks loopType="TrialHandler"
      conditionsFile = $blockCondition
      isTrials = False
      loopType = random
      nReps = $blockN
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      Routine prep
      LoopInitiator trials loopType="TrialHandler"
        Selected rows = $pick
        conditionsFile = $trailCondition
        loopType = random
        nReps = $repN
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        Routine trial
        Routine feedbacks
      LoopTerminator trials
      Routine estimation
    LoopTerminator blocks
  LoopTerminator MFTR
  Routine end
